PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  expName = 9.60trial3
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimulus
      size = (224,224)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = pix
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    MouseComponent mouse
      clickable = image
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name,image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      timeRelativeTo = routine
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  Routine instruction
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will see a total of 30 images. You will see each image for 5 seconds. In these 5 seconds, please click the part of the image that you find the most salient or attention-grabbing.

        Press any key to begin!
    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine pause
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = no_quotes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'stimuli copy/aaron-burden-xNsoHwvoHnY-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/alexandre-chambon-ADqQgiStp4c-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/anthony-intraversato-xr43RescWSA-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/arjun-kapoor-Om3JbZp3CCo-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/chris-leipelt-fqoHScXjiW4-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/chuttersnap-6ELMRvIuJ1g-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/daniel-mirlea-w4lzk2_Yasc-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/daniela-cuevas-t7YycgAoVSw-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/darya-sev-QRdX9dO8poY-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/dave-hoefler-oi65oz2xNag-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/diego-ph-xW42e724p00-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/drew-farwell-ScLYGfuCqQg-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/eberhard-grossgasteiger-fTlXjG24mQ0-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/gritt-zheng-K88BVN6yMrU-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/jack-b-JYZYRF0j_Uc-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/jake-remy-QBAMncfwXr8-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/james-haworth-Hm7BtNRT6eE-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/jared-rice-WbOn78k-ywU-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/jordan-graff-87111nn8z_w-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/library-of-congress-VFTxZaIsDAs-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/long-truong-vRepMA0VQ54-unsplash.jpeg'},
      {'stimulus': 'stimuli copy/mae-mu-KXq1wGn_OXI-unsplash.jpeg'}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
    Routine trial
    Routine pause
  LoopTerminator trials
